PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 960]
  color = 0.0196, 0.2549, 0.0196
  expName = Iowa_Gambling_Task
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instruction
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Initialization
      Code Type = Py
      Begin Experiment:
        import random

        # Begin Experiment
        net_worth = 2000
        net_worth_practice = 2000
        feedback_text = ""
        final_message_text = ""
        feedback_text_2 = ""
        info_text = ""
        practice_info_text = ""


        def simulateOutcome(chosen_deck, conditions):
            deck_data = conditions[chosen_deck]  # Access reward and penalty from conditions
            reward, penalty = deck_data['Reward'], deck_data['Penalty']

            if random.random() < 0.5:  # Assuming 50% chance to win/lose for demonstration
                return reward
            else:
                return penalty

        deck_positions = [(-0.5, 0), (-0.17, 0), (0.17, 0), (0.5, 0)]
        arrow_offset_y = 0.2  # Adjust this value to move the arrow higher
        current_position = random.randint(0, len(deck_positions) - 1)
    ImageComponent instruction_image
      image = Instruction_1.png
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine practice_instruction
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent practice_instruction_image
      image = practice_instruction.jpg
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine Main_Task
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    ImageComponent deck_a_image
      image = Card.jpg
      pos = (-0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_b_image
      image = Card.jpg
      pos = (-0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_c_image
      image = Card.jpg
      pos = (0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_d_image
      image = Card.jpg
      pos = (0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent arrow_image
      image = arrow.png
      pos = (0, 1)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    CodeComponent arrow_movement
      Code Type = Py
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      Begin Experiment:
        deck_positions = [(-0.5, 0), (-0.17, 0), (0.17, 0), (0.5, 0)]
        current_position = 0
        arrow_offset_y = 0.3  # Adjust this value to move the arrow higher
        arrow_image.pos = (deck_positions[current_position][0], deck_positions[current_position][1] + arrow_offset_y)
      Begin Routine:
        # Set arrow position at the start of each trial
        arrow_image.pos = (deck_positions[current_position][0], deck_positions[current_position][1] + arrow_offset_y)
    KeyboardComponent response_key
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        net_worth = 2000
        previous_choice = 'None'
        previous_outcome = 0

        # Prepare to store data
        choices = []
        outcomes = []
        net_worths = []

        def log_data(trial_type, choice, outcome, net_worth):
            choices.append(choice)
            outcomes.append(outcome)
            net_worths.append(net_worth)
            thisExp.addData('trialType', trial_type)
            thisExp.addData('choice', choice)
            thisExp.addData('outcome', outcome)
            thisExp.addData('net_worth', net_worth)
            thisExp.nextEntry()  # Ensure data is logged correctly
      Begin Routine:
        if practice_completed:
            print(f"Before Main Task: Net Worth is {net_worth}")
            practice_completed = False  # Reset the flag

        # Update the display text to show current total and previous choice
        info_text = f"جمع پول شما: {(net_worth)}\n\nانتخاب قبلی شما: {(previous_outcome)}"
        info_display.setText(info_text)  # Update the text component with info_text
      End Routine:
        conditions = {
            'deck_a': {'Reward': 100, 'Penalty': -250},
            'deck_b': {'Reward': 100, 'Penalty': -1150},
            'deck_c': {'Reward': 50, 'Penalty': -25},
            'deck_d': {'Reward': 50, 'Penalty': -200},
        }

        def to_persian_number(number):
            english_to_persian = {
                '0': '۰', '1': '۱', '2': '۲', '3': '۳', '4': '۴',
                '5': '۵', '6': '۶', '7': '۷', '8': '۸', '9': '۹'
            }

            number_str = str(abs(number))  # Convert number to string and ignore the sign for now
            persian_number = ''.join(english_to_persian.get(char, char) for char in number_str)

            # Add negative sign to the right side if the number is negative
            if number < 0:
                persian_number += '−'

            return persian_number

        if response_key.keys:
            if 'f' in response_key.keys:
                chosen_action = 'deck_' + chr(97 + current_position)  # Dynamically select the deck based on arrow position
                outcome = simulateOutcome(chosen_action, conditions)
                net_worth += outcome
                previous_choice = chosen_action
                previous_outcome = outcome
                log_data('main', chosen_action, outcome, net_worth)
                feedback_text = f"شما بازی کردید\n\n نتیجه:  {(outcome)}\n\n  جمع پول شما اکنون:  {(net_worth)}"
            elif 'j' in response_key.keys:
                chosen_action = 'pass'
                previous_choice = chosen_action
                previous_outcome = 0
                log_data('main', chosen_action, 0, net_worth)
                feedback_text = f"شما بازی نکردید\n\n  جمع پول شما اکنون:  {(net_worth)}"

            feedback_display.setText(feedback_text)  # Update the text component with feedback_text

            # Randomly move the arrow to a new position for the next trial
            current_position = random.randint(0, len(deck_positions) - 1)

            continueRoutine = False  # End the routine after making a choice
    TextComponent info_display
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = $info_text
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  Routine Instruction_2
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent instruction_2_image
      image = Instruction_2.jpg
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine Feedback
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    TextComponent feedback_display
      languageStyle = Arabic
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback_text
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  Routine End
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    TextComponent final_message
      font = B koodak 
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        $final_message_text
    CodeComponent code
      Code Type = Py
      Begin Routine:
        final_message_text =f"پایان بازی\n\n مبلغ نهایی شما:{(net_worth)} \n\nپژوهشگران:\n Parinaz Khosravani \n Farzad Soleimani \n\n برای خروج کلید Esc را فشار دهید."
        final_message.setText(final_message_text)
  Routine after_practice
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent after_practice_image
      image = after_practice.jpg
      size = (1.645, 1.029)
      startVal [time (s)] = 0.0
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  Routine practice_task
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    ImageComponent deck_a_image_2
      image = Card.jpg
      pos = (-0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_b_image_2
      image = Card.jpg
      pos = (-0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_c_image_2
      image = Card.jpg
      pos = (0.17, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent deck_d_image_2
      image = Card.jpg
      pos = (0.5, 0)
      size = (0.25, 0.35)
      startVal [time (s)] = 0.0
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    ImageComponent arrow_image_2
      image = arrow.png
      pos = (0, 1)
      size = (0.2,0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_response
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent arrow_movement_2
      Code Type = Py
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      Begin Experiment:
        deck_positions = [(-0.5, 0), (-0.17, 0), (0.17, 0), (0.5, 0)]
        current_position = 0
        arrow_offset_y = 0.3  # Adjust this value to move the arrow higher
        arrow_image_2.pos = (deck_positions[current_position][0], deck_positions[current_position][1] + arrow_offset_y)
      Begin Routine:
        # Set arrow position at the start of each trial
        arrow_image_2.pos = (deck_positions[current_position][0], deck_positions[current_position][1] + arrow_offset_y)
    CodeComponent code_3
      Code Type = Py
      Begin Experiment:
        net_worth_practice = 2000  # Initialize net worth for practice
        practice_completed = False  # Flag to check if practice is completed
        previous_outcome_practice = 0
      Begin Routine:
        # This code runs once at the beginning of the routine
        feedback_text_2 = ''

        # Update the display text to show current total and previous choice for practice
        practice_info_text = f"جمع پول شما: {(net_worth_practice)}\n\nانتخاب قبلی شما: {(previous_outcome_practice)}"
        practice_info_display.setText(practice_info_text)  # Update the text component with info_text_practice
      Each Frame:
        conditions = {
            'deck_a_2': {'Reward': 100, 'Penalty': -250},
            'deck_b_2': {'Reward': 100, 'Penalty': -1150},
            'deck_c_2': {'Reward': 50, 'Penalty': -25},
            'deck_d_2': {'Reward': 50, 'Penalty': -200},
        }
        def to_persian_number(number):
            english_to_persian = {
                '0': '۰', '1': '۱', '2': '۲', '3': '۳', '4': '۴',
                '5': '۵', '6': '۶', '7': '۷', '8': '۸', '9': '۹'
            }


        if practice_response.keys:
            if 'f' in practice_response.keys:
                chosen_action = 'deck_' + chr(97 + current_position) + '_2'  # Dynamically select the deck based on arrow position
                print(f"Chosen Action: {chosen_action}")
                outcome = simulateOutcome(chosen_action, conditions)
                print(f"Outcome: {outcome}")
                net_worth_practice += outcome
                print(f"Net Worth Practice: {net_worth_practice}")
                previous_choice_practice = chosen_action
                previous_outcome_practice = outcome
                feedback_text_2 = f"شما بازی کردید\n\n نتیجه:  {(outcome)}\n\n  جمع پول شما اکنون:  {(net_worth_practice)}"
            elif 'j' in practice_response.keys:
                chosen_action = 'pass'
                previous_choice_practice = chosen_action
                previous_outcome_practice = 0
                feedback_text_2 = f"شما بازی نکردید\n\n  جمع پول شما اکنون:  {(net_worth_practice)}"

            feedback_display_2.setText(feedback_text_2)  # Update the text component with feedback_text_2
            print(f"Feedback Text: {feedback_text_2}")

            # Randomly move the arrow to a new position for the next trial
            current_position = random.randint(0, len(deck_positions) - 1)

            continueRoutine = False  # End the routine after making a choice
      End Routine:
        # Check if it’s the last practice trial
        if practice_loop.thisN == practice_loop.nTotal - 1:
            net_worth = 2000  # Reset net worth to 2000 after practice
            practice_completed = True  # Set the flag to indicate practice is completed
            print(f"End of Practice Loop: Net Worth Reset to {net_worth}")
    TextComponent practice_info_display
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      text = $practice_info_text
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  Routine Feedback_2
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    TextComponent feedback_display_2
      languageStyle = Arabic
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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      text:
        $feedback_text_2
Flow
  Routine Instruction
  Routine practice_instruction
  Routine Instruction_2
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Deck': 'A', 'Reward': 100, 'Penalty': -250},
      {'Deck': 'B', 'Reward': 100, 'Penalty': -1150},
      {'Deck': 'C', 'Reward': 50, 'Penalty': -25},
      {'Deck': 'D', 'Reward': 50, 'Penalty': -200}]
    Routine practice_task
    Routine Feedback_2
  LoopTerminator practice_loop
  Routine after_practice
  LoopInitiator loop loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Deck': 'A', 'Reward': 100, 'Penalty': -250},
      {'Deck': 'B', 'Reward': 100, 'Penalty': -1150},
      {'Deck': 'C', 'Reward': 50, 'Penalty': -25},
      {'Deck': 'D', 'Reward': 50, 'Penalty': -200}]
    Routine Main_Task
    Routine Feedback
  LoopTerminator loop
  Routine End
